PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = meta
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Routines
  Routine tela_inicial
    TextComponent texto_tela_inicial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bem vindo ao experimento de metacognição com faces de Mooney.
        Você verá uma sequência de duas imagens e, após vê-las, deverá responder em qual das duas reconhece uma face humana. Apenas uma delas contém uma face.
        Após isso, você deverá informar uma estimativa da sua confiança na resposta, em uma escala de 1 a 5.
        Pressione a tecla “Espaço” do seu teclado para prosseguir.
    KeyboardComponent key_resp_ti
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrucao_resposta
    TextComponent text_ir
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pressione "1" ou "2" caso você reconheça a face humana na primeira ou segunda imagem, respectivamente.

        Você terá dois segundos para responder a essa pergunta.

        Para indicar a confiança da sua resposta não há limite de tempo.

        Pressione a tecla “Espaço” do seu teclado para prosseguir.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucao_inicio
    TextComponent text_ii
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Posicione suas mãos.

        Ao pressionar a tecla "Espaço" do seu teclado o experimento iniciará, com uma cruz de fixação sendo exibida no centro, seguida das imagens e, posteriormente, as perguntas.

        O experimento é composto de 4 blocos de 40 pares cada.

        Pressione a tecla “Espaço” do seu teclado para prosseguir.
    KeyboardComponent key_resp_ii
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        f = np.arange(40)
        d = np.arange(40)
        ff = np.arange(40)
        dd = np.arange(40)
        np.random.shuffle(f)
        np.random.shuffle(d)
        np.random.shuffle(ff)
        np.random.shuffle(dd)
        primeiro = np.empty(40)
        segundo = np.empty(40)
        terceiro = np.empty(40)
        quarto = np.empty(40)
        e = np.random.randint(2, size=40)
        ee = np.random.randint(2, size=40)
        caminho = "./mooneyfaces/"
        file = ""
        i = 0
  Routine fixate
    TextComponent text
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine case_1
    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if e[i] == 0:
            file = caminho + 'f' + str(f[i]) + '.jpg'
        else:
            file = caminho + 'd' +str(d[i]) + '.jpg'
    ImageComponent image_1
      image [set every frame] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine inter_time
    TextComponent text_it
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine case_2
    CodeComponent code_3
      Code Type = Py
      Each Frame:
        if e[i] == 1:
            file = caminho + 'f' + str(f[i]) + '.jpg'
        else:
            file = caminho + 'd' + str(d[i]) + '.jpg'
      End Routine:
        i = i + 1
    ImageComponent image_2
      image [set every frame] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine resposta
    TextComponent text_resposta
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Qual a imagem com a face humana, 1 ou 2?
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine confianca
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Responda qual o grau de confiança na sua resposta, sendo 1 menos confiante e 5 mais confiante.

        Selecione sua resposta clicando na barra abaixo ou pressionando o número correspondente no teclado, e, em seguida, pressione a tecla "Enter".
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.6
      size = 1.0
      startVal [time (s)] = 0.0
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Flow
  Routine tela_inicial
  Routine instrucao_resposta
  Routine instrucao_inicio
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 40
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    Routine fixate
    Routine case_1
    Routine inter_time
    Routine case_2
    Routine resposta
    Routine confianca
  LoopTerminator trials
